---
API: 2
OpenSesame: 3.1.3a1
Platform: posix
---
set width 1024
set uniform_coordinates no
set transparent_variables no
set title "P0005.5 Semantic pupillary light response (Valence control in French)"
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set osf_id 57ea8786b83f6901ef94aad1
set osf_datanode_id 57ea878a6c613b01f313c299
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#555555"
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/sebastiaan/Documents/Research/Projects/P0005 [Semantic PLR]/P0005.5 [Valence control]"
set disable_garbage_collection yes
set description "Default description"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background "#777777"

define sketchpad break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="- Pause -" x=0 y=0 z_index=0

define sketchpad correct
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#005500" show_if=always style=default x=0 y=0 z_index=0

define form_text_display end
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Fin</span>"
	__form_text__
	L'expérience est maintenant terminée.
	
	Merci pour votre participation !
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define pygaze_log end_phase_target
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define inline_script end_practice
	set description "Executes Python code"
	___run__
	var.practice = 'no'
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run validate always
	run pygaze_init always
	run instructions_1 always
	run instructions_2 always
	run training_loop always
	run instructions_3 always
	run end_practice always
	run loop always
	run end always

define sketchpad false
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#780000" show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation
	set duration 3000
	set description "Displays stimuli"
	draw fixdot color="#555555" show_if=always style=default x=0 y=0 z_index=0

define form_text_display instructions_1
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Instructions</span>"
	__form_text__
	Lors de cette expérience, vous verrez des mots s'afficher à l'écran.
	
	Le but est d'appuyer sur la barre d'espace lorsque vous verrez des noms d'animaux s'afficher et de n'appuyer sur aucune touche dans le cas contraire.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display instructions_2
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Instructions</span>"
	__form_text__
	L'expérience va tout d'abord commencer par une courte phase d'entraînement.
	
	Veuillez appuyer sur le bouton "OK" pour débuter l'entraînement.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display instructions_3
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Instructions</span>"
	__form_text__
	L'entraînement est terminé, nous allons maintenant passer à la véritable phase de l'expérience.
	
	Veuillez appuyer sur le bouton "OK" pour débuter l'expérience.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response keyboard_response
	set timeout 3000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop loop
	set source_file "stimuli.csv"
	set source file
	set repeat 1
	set order random
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 123
	set continuous no
	set column_order "word;type;correct_response"
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response None
	setcycle 0 word lumière
	setcycle 0 type light
	setcycle 1 correct_response None
	setcycle 1 word lumineux
	setcycle 1 type light
	setcycle 2 correct_response None
	setcycle 2 word luminosité
	setcycle 2 type light
	setcycle 3 correct_response None
	setcycle 3 word éclatant
	setcycle 3 type light
	setcycle 4 correct_response None
	setcycle 4 word éclairé
	setcycle 4 type light
	setcycle 5 correct_response None
	setcycle 5 word éclaircie
	setcycle 5 type light
	setcycle 6 correct_response None
	setcycle 6 word éclairer
	setcycle 6 type light
	setcycle 7 correct_response None
	setcycle 7 word éclaircissement
	setcycle 7 type light
	setcycle 8 correct_response None
	setcycle 8 word brillant
	setcycle 8 type light
	setcycle 9 correct_response None
	setcycle 9 word brillance
	setcycle 9 type light
	setcycle 10 correct_response None
	setcycle 10 word briller
	setcycle 10 type light
	setcycle 11 correct_response None
	setcycle 11 word illuminé
	setcycle 11 type light
	setcycle 12 correct_response None
	setcycle 12 word illuminer
	setcycle 12 type light
	setcycle 13 correct_response None
	setcycle 13 word illumination
	setcycle 13 type light
	setcycle 14 correct_response None
	setcycle 14 word illuminant
	setcycle 14 type light
	setcycle 15 correct_response None
	setcycle 15 word scintillant
	setcycle 15 type light
	setcycle 16 correct_response None
	setcycle 16 word scintillement
	setcycle 16 type light
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	setcycle 33 correct_response None
	setcycle 33 word ténèbres
	setcycle 33 type dark
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	setcycle 68 correct_response None
	setcycle 68 word abandonner
	setcycle 68 type ctrl
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	setcycle 103 correct_response space
	setcycle 103 word antilope
	setcycle 103 type animal
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	run trial_sequence

define pygaze_drift_correct pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered yes
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_init pygaze_init
	set tracker_type "Simple dummy"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set _logfile automatic

define pygaze_log pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_start_recording pygaze_start_recording
	set status_msg "start_trial [count_trial_sequence]"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define inline_script set_correct_response
	set description "Executes Python code"
	set _run ""
	___prepare__
	if var.category == 'animal':
		var.correct_response = 'space'
	else:
		var.correct_response = None
	__end__

define pygaze_log start_phase_fixation
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log start_phase_target
	set throttle 2
	__msg__
	end_phase fixation
	start_phase target
	__end__
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sketchpad target
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[word].png" scale=1 show_if=always x=0 y=0 z_index=0

define loop training_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set column_order "correct_response;word"
	set break_if_on_first yes
	set break_if never
	setcycle 0 category control
	setcycle 0 word chère
	setcycle 0 practice yes
	setcycle 1 category control
	setcycle 1 word collecte
	setcycle 1 practice yes
	setcycle 2 category control
	setcycle 2 word malade
	setcycle 2 practice yes
	setcycle 3 category control
	setcycle 3 word léger
	setcycle 3 practice yes
	setcycle 4 category control
	setcycle 4 word joyeux
	setcycle 4 practice yes
	setcycle 5 category control
	setcycle 5 word inégalé
	setcycle 5 practice yes
	setcycle 6 category control
	setcycle 6 word reflet
	setcycle 6 practice yes
	setcycle 7 category control
	setcycle 7 word rincer
	setcycle 7 practice yes
	setcycle 8 category animal
	setcycle 8 word pigeon
	setcycle 8 practice yes
	setcycle 9 category animal
	setcycle 9 word cheval
	setcycle 9 practice yes
	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run set_correct_response always
	run pygaze_drift_correct always
	run pygaze_start_recording always
	run start_phase_fixation always
	run fixation always
	run start_phase_target always
	run target always
	run keyboard_response always
	run end_phase_target always
	run correct "[correct] = 1"
	run false "[correct] = 0"
	run break "[count_target] = 25 or [count_target] = 50 or [count_target] = 75 or [count_target] = 100"
	run logger always
	run pygaze_log always
	run pygaze_stop_recording always

define inline_script validate
	set description "Checks whether the file pool is complete"
	___run__
	from datamatrix import io
	
	# Check if all stimuli during practice are in the file pool
	for word in items['training_loop'].dm.word:
		print('Checking %s' % word)
		assert('%s.png' % word in pool)
	
	# Check if all stimuli during the real experiment are in the file pool
	dm = io.readtxt(pool['stimuli.csv'])
	for word in dm.word:
		print('Checking %s' % word)
		assert('%s.png' % word in pool)
	__end__
	set _prepare ""

